OpenViBE-Scenario

LSL BPM => #0
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 0
  Stream type = BPM
  Stream name = BPM_0
  Get all streams = true
  Generated epoch sample count = 2
LSL detection => #1
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = detection
  Stream name = detection_0
  Get all streams = true
  Generated epoch sample count = 2
LSL raw => #2
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = PPG
  Stream name = PPG_0
  Get all streams = true
  Generated epoch sample count = 2
LSL face => #3
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = face
  Stream name = face_0
  Get all streams = true
  Generated epoch sample count = 2
Input 1=#0, Input 2=#1, Input 3=#2, Input 4=#3 -> Signal Merger => #4
-> Signal average
-> Matrix Display "all"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
0xc67a01dc LSL stim reader => #7
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = XpTiming
  Get all streams = false
  debug = true
Signal=#4, Stimulation=#7 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/../data/ov/record-[$core{date}-$core{time}].gdf
Data=#4, Stimulations=#7 -> Signal display "all"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
