OpenViBE-Scenario
Comment
  keyboard for start/stop, stim every 5s for sync
Comment
  testing remote ppg measures
Comment
  little smoothing with epoch average
Comment
  increase chunk size and apply band-pass filter

  a bit of a rough path for real-time because
   of low frequency: lower older of
  butterworth to descease epoch time so
   that several stims could be sent to
   python box

  "low pass filtering" is done with derivative....

LSL raw
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = PPG
  Stream name = PPG_0
  Get all streams = true
  Generated epoch sample count = 2
-> Channel Selector "1;4;7;10" => #1
  Channel List = 1;4;7;10
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = PSEyeRaw;Logitech;Kinect2RGB;Kinect2IR
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 8
-> Time based epoching
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
-> Temporal filter
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 2
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 5
  Pass band ripple (dB) = 0.500000
-> Signal Differential/Integral => #6
  Operation = Differential
  Order = 1
-> Sign Change Detector => #7
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
Data=#6, Stimulations=#7 -> Signal display "filter temporal diff"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #11
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#6 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 2
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #15
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#6 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 3
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #19
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#6 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 4
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #23
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input 1=#11, Input 2=#15, Input 3=#19, Input 4=#23 -> Signal Merger
-> Channel Rename => #25
  New channel names = PSEyeRaw;Logitech;Kinect2RGB;Kinect2IR
Data=#25 -> Signal display "BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#25 -> Matrix Display "BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1 -> Identity => #28
-> Signal average
-> Matrix Display "PPG values"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Keyboard stimulator => #31
  Filename = ${Player_ScenarioDirectory}/simple-keyboard-to-stimulations.txt
Acquisition client => #32
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1025
  0x8d21ff41 = ${__volatile_ScenarioDir}/acquisition-ecg.cfg
#32.Signal stream -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #34
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral
  Operation = Differential
  Order = 1
-> Simple DSP "x^2" => #36
  Equation = x*x
-> Simple DSP "detection threshold"
  Equation = (x>50000)
-> Signal average
-> Simple DSP => #39
  Equation = x-0.01
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter => #41
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
Data=#39, Stimulations=#41 -> Signal display "ECG trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#41 -> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #44
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Matrix Display "ECG BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#44, Stimulations=#41 -> Signal display "ECG BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#36 -> 0xc73e83ec Signal display "power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#34 -> Signal display "ECG filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Clock stimulator => #49
  Interstimulation interval (in sec) = 5
  Stimulation = OVTK_GDF_Beep
Input stimulations 1=#31, Input stimulations 2=#49 -> Stimulation multiplexer => #50
-> Identity => #51
Data=#28, Stimulations=#51 -> 0xc67a01dc Signal display "PPG raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#28, Stimulation=#51 -> GDF file writer "ppg raw"
  Filename = ${__volatile_ScenarioDir}/../data_validation/ppg-raw_record-[$core{date}-$core{time}].gdf
Signal=#6, Stimulation=#51 -> GDF file writer "ppg filtered"
  Filename = ${__volatile_ScenarioDir}/../data_validation/ppg-filter_record-[$core{date}-$core{time}].gdf
Signal=#25, Stimulation=#51 -> GDF file writer "ppg BPM"
  Filename = ${__volatile_ScenarioDir}/../data_validation/ppg-bpm_record-[$core{date}-$core{time}].gdf
Input stimulations 1=#50, Input stimulations 2=#32.Stimulations -> Stimulation multiplexer => #56
Signal=#32.Signal stream, Stimulation=#56 -> GDF file writer "ECG raw"
  Filename = ${__volatile_ScenarioDir}/../data_validation/ecg-raw_record-[$core{date}-$core{time}].gdf
Input stimulations 1=#56, Input stimulations 2=#41 -> Stimulation multiplexer => #58
Signal=#44, Stimulation=#58 -> GDF file writer "ECG BPM"
  Filename = ${__volatile_ScenarioDir}/../data_validation/ecg-bpm_record-[$core{date}-$core{time}].gdf
