OpenViBE-Scenario
Comment
  testing remote ppg measures
Comment
  Replay value with smaller chunk size for ECG
Comment
  little smoothing with epoch average
Comment
  increase chunk size and apply band-pass filter

  a bit of a rough path for real-time because
   of low frequency: lower older of
  butterworth to descease epoch time so
   that several stims could be sent to
   python box

  "low pass filtering" is done with derivative....

ECG GDF file reader => #0
  Filename = ${__volatile_ScenarioDir}/../../data_validation/round1/ecg-raw_record-[2015.09.24-21.02.55].gdf
  Samples per buffer = 4
  Subtract physical minimum = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_ECG_file_3.cfg
#0.EEG stream -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral
  Operation = Differential
  Order = 1
-> Simple DSP "x^2"
  Equation = x*x
-> Simple DSP "detection threshold"
  Equation = (x>50000)
-> Signal average
-> Simple DSP => #7
  Equation = x-0.01
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter => #9
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
Input stimulations 1=#0.Stimulations, Input stimulations 2=#9 -> Stimulation multiplexer => #10
Data=#7, Stimulations=#9 -> 0xc73e83ec Signal display "ECG trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#9 -> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 30
  Debug = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_IBI.cfg
-> Channel Selector "2" => #13
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> 0xc73e83ec Matrix Display "ECG BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#13 -> Signal display "ECG BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#13, Stimulation=#10 -> GDF file writer "ECG BPM"
  Filename = ${__volatile_ScenarioDir}/../../data_validation/replay_t1/1/ecg-bpm.gdf
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_ECG_BPM-out_3.cfg
Data=#2 -> 0xc73e83ec Signal display "ECG filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

PPG GDF file reader => #18
  Filename = ${__volatile_ScenarioDir}/../../data_validation/round1/ppg-raw_record-[2015.09.24-21.02.55].gdf
  Samples per buffer = 1
  Subtract physical minimum = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_PPG_file_3.cfg
#18.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
#18.EEG stream -> Channel Rename => #20
  New channel names = PSEyeRaw;Logitech;Kinect2RGB;Kinect2IR
-> Identity => #21
-> Signal average
-> 0xc73e83ec Matrix Display "PPG values"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#20 -> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 8
-> Time based epoching
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
-> Temporal filter
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 2
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 5
  Pass band ripple (dB) = 0.500000
-> Signal Differential/Integral => #27
  Operation = Differential
  Order = 1
-> Sign Change Detector => #28
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
Data=#27, Stimulations=#28 -> 0xc73e83ec Signal display "filter temporal diff"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#28 -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 30
  Debug = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_IBI.cfg
-> Channel Selector "2" => #32
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#27 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 2
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 30
  Debug = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_IBI.cfg
-> Channel Selector "2" => #36
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#27 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 3
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 30
  Debug = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_IBI.cfg
-> Channel Selector "2" => #40
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#27 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 4
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 30
  Debug = false
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_IBI.cfg
-> Channel Selector "2" => #44
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input 1=#32, Input 2=#36, Input 3=#40, Input 4=#44 -> Signal Merger
-> Channel Rename => #46
  New channel names = PSEyeRaw;Logitech;Kinect2RGB;Kinect2IR
Data=#46 -> Signal display "BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#46 -> 0xc73e83ec Matrix Display "BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#18.Stimulations -> Identity => #49
Data=#21, Stimulations=#49 -> 0xc73e83ec Signal display "PPG raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#46, Stimulation=#49 -> GDF file writer "ppg BPM"
  Filename = ${__volatile_ScenarioDir}/../../data_validation/replay_t1/1/ppg-bpm.gdf
  0x8d21ff41 = ${__volatile_ScenarioDir}/replay_PPG_BPM-out_3.cfg
