OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = bci-hp.local
  Acquisition server port = 1025
  0x8d21ff41 = ${__volatile_ScenarioDir}/acquisition-ecg.cfg
Input stream 1=#0.Signal stream -> Identity => #1
#1.Output stream 1 -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral
  Operation = Differential
  Order = 1
-> Simple DSP "x^2" => #5
  Equation = x*x
-> Simple DSP "detection threshold"
  Equation = (x>50000)
-> Signal average
-> Simple DSP => #8
  Equation = x-0.01
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter => #10
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
Data=#8, Stimulations=#10 -> Signal display "trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> 0xc67a01dc IBI / BPM => #12
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
Signal=#12, Stimulation=#10 -> 0xc73e83ec GDF file writer
  Filename = ${__volatile_ScenarioDir}/records/s1_IBI_-[$core{date}-$core{time}].gdf
Data=#12 -> Signal display "IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#12 -> Matrix Display "IBI/BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#5 -> Signal display "power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#3 -> Signal display "ECG filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> 0xc73e83ec GDF file writer
  Filename = ${__volatile_ScenarioDir}/records/s1_openbci_-[$core{date}-$core{time}].gdf
