OpenViBE-Scenario
Comment
  testing remote ppg measures
Comment
  little smoothing with epoch average
Comment
  increase chunk size and apply band-pass filter

  a bit of a rough path for real-time because
   of low frequency: lower older of
  butterworth to descease epoch time so
   that several stims could be sent to
   python box

  "low pass filtering" is done with derivative....

LSL raw
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = PPG
  Stream name = PPG_0
  Get all streams = true
  Generated epoch sample count = 2
-> Channel Selector "1;4;7;10" => #1
  Channel List = 1;4;7;10
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = PSEyeRaw;Logitech;Kinect2RGB;Kinect2IR
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 8
-> Time based epoching
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
-> Temporal filter
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 2
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 5
  Pass band ripple (dB) = 0.500000
-> Signal Differential/Integral => #6
  Operation = Differential
  Order = 1
-> Sign Change Detector => #7
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
Data=#6, Stimulations=#7 -> Signal display "filter temporal diff"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #11
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#6 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 2
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #15
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#6 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 3
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #19
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#6 -> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 4
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
-> Channel Selector "2" => #23
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input 1=#11, Input 2=#15, Input 3=#19, Input 4=#23 -> Signal Merger
-> Channel Rename => #25
  New channel names = PSEyeRaw;Logitech;Kinect2RGB;Kinect2IR
Signal=#25 -> 0xc73e83ec 0xc67a01dc GDF file writer
  Filename = ${__volatile_ScenarioDir}/../data_validation/ppg-bpm_record-[$core{date}-$core{time}].gdf
Data=#25 -> Signal display "BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#25 -> Matrix Display "BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Signal=#6 -> 0xc73e83ec GDF file writer
  Filename = ${__volatile_ScenarioDir}/../data_validation/ppg-filter_record-[$core{date}-$core{time}].gdf
#1 -> Identity => #30
-> Signal average
-> Matrix Display "all"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#30 -> Signal display "all"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#30 -> 0xc73e83ec GDF file writer
  Filename = ${__volatile_ScenarioDir}/../data_validation/ppg-raw_record-[$core{date}-$core{time}].gdf
